PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 1
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.0
      text = сепулька
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    PolygonComponent polygon
      fillColor = white
      shape = rectangle
      size = (6, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent image
      image = A:\Photo\NTO\Cat.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine trial
