PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Эксперимент в PsychoPy  № 1
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Routines
  Routine trial
    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 8.0
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 8.0
      stopVal [duration (s)] = 12.0
      text = Hello man!
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Flow
  Routine trial
